PsychoPy2experiment version="2022.1.3"
Settings
  Data file delimiter = comma
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save excel file = True
  Screen = 1
  Units = deg
  Window size (pixels) = [1680, 1050]
  expName = PruebaGabor2
  keyboardBackend = ioHub
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Routines
  Routine Intrucciones
    TextComponent Instrucciones1
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 1
      stopVal [condition] = key_resp_3.getKeys(keyList=['space'], waitRelease=False)
      units = height
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      text:
        Bienvenidos/as
        Presiona la barra espaciadora para continuar
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = False
      startVal [time (s)] = 1
      stopVal [condition] = key_resp_3.getKeys(keyList=['space'], waitRelease=False)
      store = nothing
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    TextComponent Instrucciones2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [condition] = Instrucciones1.status==FINISHED
      stopVal [condition] = key_resp_4.getKeys(keyList=['space'], waitRelease=False)
      units = height
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      text:
        A continuacion
        veran un circulo en pantalla, por dentro tienen lineas oscuras y claras.
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = False
      startVal [condition] = Instrucciones2.status==STARTED
      stopVal [condition] = key_resp_4.getKeys(keyList=['space'], waitRelease=False)
      store = nothing
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    TextComponent Instrucciones3
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [condition] = Instrucciones2.status==FINISHED
      stopVal [condition] = key_resp_5.getKeys(keyList=['space'], waitRelease=False)
      units = height
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      text:
        Observa la cantidad de lineas claras y oscuras que hay y la orientacion de las mimas.

        Existen dos grupos de circulos, A y B.
    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = False
      startVal [condition] = Instrucciones3.status==STARTED
      stopVal [condition] = key_resp_5.getKeys(keyList=['space'], waitRelease=False)
      store = nothing
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    TextComponent instrucciones4
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [condition] = Instrucciones3.status==FINISHED
      stopVal [condition] = key_resp_6.getKeys(keyList=['space'], waitRelease=False)
      units = height
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      text:
        Elegi a que grupo pertenece el circulo en pantalla.

        Si pertenece a la categoria A presiona la flecha derecha.

        Si pertenece a la categoria B presiona la flecha izquierda.
    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = False
      startVal [condition] = instrucciones4.status==STARTED
      stopVal [condition] = key_resp_6.getKeys(keyList=['space'], waitRelease=False)
      store = nothing
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    TextComponent Instrucciones5
      letterHeight = 0.05
      startVal [condition] = instrucciones4.status==FINISHED
      stopVal [duration (s)] = 4
      text = Vamos a hacer uno de prueba!
      units = height
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  Routine End
    TextComponent Gracias
      letterHeight = 0.1
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 4
      text = ¡Muchas gracias por participar!
      units = height
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    ImageComponent image
      size = (0.5, 0.5)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 4
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  Routine Comienzo
    TextComponent ComienzoTexto
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      units = height
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      text:
        Excelente
        Si tenes alguna duda consulta antes de seguir con el/la experimentador/a

        Cuando estes listo/a para continuar presiona la barra espaciadora
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1
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  Routine feedbacka
    CodeComponent message
      Code Type = Py
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      Begin Experiment:
        msg=''
      Begin Routine:
        if keyrespTest.corr:#stored on last run routine
          msg="¡Correcto!"
        else:
          msg="Segui intentando"
    TextComponent feedback_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $msg
      units = height
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  Routine trialb
    GratingComponent grating2
      mask = circle
      ori [set every repeat] = $Orientacion
      phase = 0
      sf [set every repeat] = $FrecuenciaEspacial
      size = (200, 200)
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 3.0
      tex = sin
      units = pix
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    KeyboardComponent keyrespTest
      allowedKeys = 'left','right'
      correctAns = $tecla
      forceEndRoutine = True
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 3
      storeCorrect = True
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  Routine Prueba
    KeyboardComponent KeyRespPrueba
      allowedKeys = 'left','right'
      correctAns = tecla
      forceEndRoutine = True
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 3
      storeCorrect = True
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    GratingComponent GratingPrueba
      mask = circle
      ori [set every repeat] = $Orientacion
      phase = 0
      sf [set every repeat] = $FrecuenciaEspacial
      size = (200,200)
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 3.0
      tex = sin
      units = pix
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  Routine FeedbackPrueba
    CodeComponent MsjePrueba
      Code Type = Py
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      Begin Routine:
        if KeyRespPrueba.corr:#stored on last run routine
          msg="Correcto"
        else:
          msg="Segui intentando"
    TextComponent FeedbackPrueb
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $msg
      units = height
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Flow
  Routine Intrucciones
  LoopInitiator Training loopType="TrialHandler"
    conditionsFile = ParametrosAyBtest.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'Frecuencia': 5.75266988645415, 'Orientaciondecimales': 0.981868948378523, 'Categoria': 'A', 'Orientacion': 98.18689483785231, 'FrecuenciaEspacial': 0.02876334943227075, 'tecla': 'left'},
      {'Frecuencia': 5.63503896122014, 'Orientaciondecimales': 0.942857344714462, 'Categoria': 'A', 'Orientacion': 94.2857344714462, 'FrecuenciaEspacial': 0.028175194806100697, 'tecla': 'left'},
      {'Frecuencia': 5.75349902682942, 'Orientaciondecimales': 0.976843040460124, 'Categoria': 'A', 'Orientacion': 97.6843040460124, 'FrecuenciaEspacial': 0.0287674951341471, 'tecla': 'left'},
      {'Frecuencia': 6.76753116765003, 'Orientaciondecimales': 0.60647052076609, 'Categoria': 'B', 'Orientacion': 60.647052076609, 'FrecuenciaEspacial': 0.03383765583825015, 'tecla': 'right'},
      {'Frecuencia': 5.64036966612441, 'Orientaciondecimales': 0.946219449854496, 'Categoria': 'A', 'Orientacion': 94.6219449854496, 'FrecuenciaEspacial': 0.02820184833062205, 'tecla': 'left'},
      {'Frecuencia': 5.76793716427588, 'Orientaciondecimales': 0.991949304766192, 'Categoria': 'A', 'Orientacion': 99.1949304766192, 'FrecuenciaEspacial': 0.0288396858213794, 'tecla': 'left'},
      {'Frecuencia': 5.7434200716108, 'Orientaciondecimales': 0.977895959734118, 'Categoria': 'A', 'Orientacion': 97.7895959734118, 'FrecuenciaEspacial': 0.028717100358054002, 'tecla': 'left'},
      {'Frecuencia': 5.7133165821624, 'Orientaciondecimales': 0.9663998844466, 'Categoria': 'A', 'Orientacion': 96.63998844465999, 'FrecuenciaEspacial': 0.028566582910812, 'tecla': 'Left'}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
    Routine Prueba
    Routine FeedbackPrueba
  LoopTerminator Training
  Routine Comienzo
  LoopInitiator Test loopType="TrialHandler"
    conditionsFile = ParametrosAyB.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'Frecuencia': 5.62357944791498, 'Orientaciondecimales': 0.943698663452456, 'Categoria': 'A', 'Orientacion': 94.3698663452456, 'FrecuenciaEspacial': 0.0281178972395749, 'tecla': 'Left'},
      {'Frecuencia': 5.69097957372747, 'Orientaciondecimales': 0.960710372331322, 'Categoria': 'A', 'Orientacion': 96.07103723313219, 'FrecuenciaEspacial': 0.028454897868637353, 'tecla': 'Left'},
      {'Frecuencia': 5.70302277314696, 'Orientaciondecimales': 0.969982272857429, 'Categoria': 'A', 'Orientacion': 96.9982272857429, 'FrecuenciaEspacial': 0.028515113865734798, 'tecla': 'Left'},
      {'Frecuencia': 6.7712490071334, 'Orientaciondecimales': 0.602038916028961, 'Categoria': 'B', 'Orientacion': 60.2038916028961, 'FrecuenciaEspacial': 0.033856245035667, 'tecla': 'Right'},
      {'Frecuencia': 6.78591396694264, 'Orientaciondecimales': 0.609681458205986, 'Categoria': 'B', 'Orientacion': 60.96814582059859, 'FrecuenciaEspacial': 0.0339295698347132, 'tecla': 'Right'},
      {'Frecuencia': 5.7861300224522, 'Orientaciondecimales': 0.988906484298624, 'Categoria': 'A', 'Orientacion': 98.89064842986241, 'FrecuenciaEspacial': 0.028930650112261, 'tecla': 'Left'},
      {'Frecuencia': 6.74037109471642, 'Orientaciondecimales': 0.595246124615583, 'Categoria': 'B', 'Orientacion': 59.5246124615583, 'FrecuenciaEspacial': 0.0337018554735821, 'tecla': 'Right'},
      {'Frecuencia': 5.70147029690313, 'Orientaciondecimales': 0.965086685933335, 'Categoria': 'A', 'Orientacion': 96.5086685933335, 'FrecuenciaEspacial': 0.02850735148451565, 'tecla': 'Left'}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
    Routine trialb
    Routine feedbacka
  LoopTerminator Test
  Routine End
